PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Association _task
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      pos = (0.0, 0.3)
      startVal [time (s)] = 0.0
      text = How are you feeling right now ?
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = 'very happy' , 'happy' , 'unhappy' ,  'sad'
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4)
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  Routine positive_
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    MovieComponent movie_postive
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = postive emotion inducing video.mp4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine negative
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    MovieComponent movie_negative
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = negative mood inducing video.mp4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine letter
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $letter_association
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3, 0.2)
      startVal [time (s)] = 0
      text = submit
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    MouseComponent mouse
      clickable = button
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine free_association_
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $free_association
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    TextboxComponent textbox_2
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3, 0.2)
      startVal [time (s)] = 0
      text = submit
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    MouseComponent mouse_2
      clickable = button
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine letter_
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $letter_association
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    TextboxComponent textbox_3
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button_3
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3, 0.2)
      startVal [time (s)] = 0
      text = submit
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    MouseComponent mouse_3
      clickable = button
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine free__association_
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 50.0
      text [set every repeat] = $free_association
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    TextboxComponent textbox_4
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 50.0
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    ButtonComponent button_4
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3, 0.2)
      startVal [time (s)] = 0
      text = submit
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    MouseComponent mouse_4
      clickable = button
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  Routine positive_
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = letter_association.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('letter_association', "  Name three things you can find in a kitchen that start with the letter 'M':")]),
      OrderedDict([('letter_association', "  Think of three words starting with 'D' that describe your dream vacation destination:")]),
      OrderedDict([('letter_association', "Associate three words that begin with 'C' and relate them to your favorite hobby or activity")]),
      OrderedDict([('letter_association', "Connect three words that begin with 'P' to describe your ideal weekend:")]),
      OrderedDict([('letter_association', "Respond with the first word that comes to mind for the given letters: 'H'")])]
    Routine letter
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = free_association.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('free_association', 'What are three words that describe your ideal vacation?')]),
      OrderedDict([('free_association', 'What are the first three words you think of when imagining your future job?')]),
      OrderedDict([('free_association', 'What are the first three things that come to mind when you think of family?')]),
      OrderedDict([('free_association', 'give two things when you think of a healthy lifestyle, what activities or habits come to mind?')]),
      OrderedDict([('free_association', 'What three things do you associate with a relaxing evening at home?')])]
    Routine free_association_
  LoopTerminator trials_2
  Routine negative
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = letter_association.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('letter_association', "  Name three things you can find in a kitchen that start with the letter 'M':")]),
      OrderedDict([('letter_association', "  Think of three words starting with 'D' that describe your dream vacation destination:")]),
      OrderedDict([('letter_association', "Associate three words that begin with 'C' and relate them to your favorite hobby or activity")]),
      OrderedDict([('letter_association', "Connect three words that begin with 'P' to describe your ideal weekend:")]),
      OrderedDict([('letter_association', "Respond with the first word that comes to mind for the given letters: 'H'")])]
    Routine letter_
  LoopTerminator trials_3
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = free_association.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('free_association', 'What are three words that describe your ideal vacation?')]),
      OrderedDict([('free_association', 'What are the first three words you think of when imagining your future job?')]),
      OrderedDict([('free_association', 'What are the first three things that come to mind when you think of family?')]),
      OrderedDict([('free_association', 'give two things when you think of a healthy lifestyle, what activities or habits come to mind?')]),
      OrderedDict([('free_association', 'What three things do you associate with a relaxing evening at home?')])]
    Routine free__association_
  LoopTerminator trials_4
